<CompuCell3D version="3.6.2">

    <Potts>

        <!-- Basic properties of CPM (GGH) algorithm -->
        <Dimensions x="50" y="50" z="50"/>
        <Steps>1000</Steps>
        <Temperature>10.0</Temperature>
        <NeighborOrder>1</NeighborOrder>
    </Potts>

    <Plugin Name="CellType">

        <!-- Listing all cell types in the simulation -->
        <CellType TypeId="0" TypeName="Medium"/>
        <CellType TypeId="1" TypeName="A"/>
        <CellType TypeId="2" TypeName="B"/>
        <CellType TypeId="3" TypeName="Wall" Freeze=""/>
    </Plugin>

    <Plugin Name="Volume">
        <VolumeEnergyParameters CellType="A" LambdaVolume="2.0" TargetVolume="25"/>
        <VolumeEnergyParameters CellType="B" LambdaVolume="2.0" TargetVolume="25"/>
        <VolumeEnergyParameters CellType="Wall" LambdaVolume="2.0" TargetVolume="25"/>
    </Plugin>

    <Plugin Name="CenterOfMass">

        <!-- Module tracking center of mass of each cell -->
    </Plugin>

    <Plugin Name="Contact">
        <!-- Specification of adhesion energies -->
        <Energy Type1="Medium" Type2="Medium">10.0</Energy>
        <Energy Type1="Medium" Type2="A">10.0</Energy>
        <Energy Type1="Medium" Type2="B">10.0</Energy>
        <Energy Type1="Medium" Type2="Wall">10.0</Energy>
        <Energy Type1="A" Type2="A">10.0</Energy>
        <Energy Type1="A" Type2="B">10.0</Energy>
        <Energy Type1="A" Type2="Wall">10.0</Energy>
        <Energy Type1="B" Type2="B">10.0</Energy>
        <Energy Type1="B" Type2="Wall">10.0</Energy>
        <Energy Type1="Wall" Type2="Wall">10.0</Energy>
        <NeighborOrder>1</NeighborOrder>
    </Plugin>

    <Steppable Type="DiffusionSolverFE">
        <DiffusionField>
            <DiffusionData>
                <FieldName>FGF</FieldName>
                <DiffusionConstant>0.010</DiffusionConstant>
                <DecayConstant>0.000</DecayConstant>
                <ConcentrationFileName>Simulation/diffusion_2D.pulse.txt</ConcentrationFileName>
            </DiffusionData>
        </DiffusionField>
    </Steppable>

    <Steppable Type="UniformInitializer">
        <Region>
            <BoxMin x="10" y="10" z="10"/>
            <BoxMax x="40" y="40" z="40"/>
            <Gap>0</Gap>
            <Width>5</Width>
            <Types>A,B</Types>
        </Region>
    </Steppable>


</CompuCell3D>
